<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Alt</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Int64Property">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM7</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM6</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton ShiftKey Capital CapsLock D P T Alt</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Int64Property">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM7</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM6</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>2</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.05S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 01\_box01_vid_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 01\_box01_vid_.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>20</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM3</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%s</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 01\_box01_ard_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>1</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.05S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 02\_box02_vid_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 02\_box02_vid_.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>20</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM4</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%s</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 02\_box02_ard_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.05S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 03\_box03_vid_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 03\_box03_vid_.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>20</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM7</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%s</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 03\_box03_ard_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>3</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.05S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 04\_box04_vid_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 04\_box04_vid_.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>20</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM6</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%s</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\shopadmin\Desktop\Bonsai Output\chamber 04\_box04_ard_ts_raw_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>None</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>